config:
  title: Aquarium RNA Extraction Kits
  description: Modules to provide `show` methods for working with RNA extraction kits
  copyright: University of Washington
  version: 0.0.2
  authors: [{name: Devin Strickland, affiliation: University of Washington}, {name: Dany Fu, affiliation: Boston University}, {name: Rita Chen, affiliation: Boston University}]
  maintainer: {name: Devin Strickland, email: strcklnd@uw.edu}
  github: {user: dvnstrcklnd, repo: aq-rna-extraction-kits, organization: klavinslab}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
library: {name: MagMAXViralIINAIsolationKit, category: RNA Extraction Kits}
code_source:
# frozen_string_literal: true
# Written By Dany Fu 2020-05-18

needs 'Standard Libs/LabwareNames'

# MagMAX Viral/Pathogen II Nucleic Acid Isolation Kit
# 1) Suspend magnetic beads in buffer
# 2) Proteinase K digestion
# 3) Wash beads (3x)
# 4) Release RNA from beads
module MagMAXViralIINAIsolationKit
  include Units
  include LabwareNames

  NAME = 'MagMAX Viral/Pathogen II Nucleic Acid Isolation Kit'

  OVERAGE = 1.1 # additional 10%
  PLATE_SIZE = 96
  SPEED = 1050 # RPM
  TEMP = 65 # celcius
  TIME1 = 1 # 1 min
  TIME2 = 2 # 2 min
  TIME3 = 3 # 3 min
  TIME5 = 5 # 5 min
  TIME10 = 10 # 10 min
  VOL_BEADS_PER_WELL = 10.0
  VOL_BS_PER_WELL = 265.0
  VOL_CONICAL_TUBE_ML = 15
  VOL_ELUTION = { qty: 50, units: MICROLITERS }.freeze
  VOL_ETHANOL = { qty: 250, units: MICROLITERS }.freeze
  VOL_MS2 = { qty: 5, units: MICROLITERS }.freeze
  VOL_PROTEINASE_K = { qty: 5, units: MICROLITERS }.freeze
  VOL_SAMPLE = { qty: 200, units: MICROLITERS }.freeze
  VOL_WB = { qty: 500, units: MICROLITERS }.freeze # wash buffer

  # 265uL(buffer) + 10uL(beads)=275uL per well
  # Include 10% overage when making the Binding Bead Mix
  # for use with multiple reactions
  def prepare_materials
    total_beads = ((PLATE_SIZE * VOL_BEADS_PER_WELL * OVERAGE) / 1000).round(2)
    total_bs = ((PLATE_SIZE * VOL_BS_PER_WELL * OVERAGE) / 1000).round(2)
    total_vol = total_beads + total_bs
    num_tubes = { qty: (total_vol / VOL_CONICAL_TUBE_ML).round,
                  units: TUBE_15_ML_CONICAL }
    bs_per_tube = { qty: total_bs / num_tubes[:qty], units: MILLILITERS }
    beads_per_tube = { qty: total_beads / num_tubes[:qty], units: MILLILITERS }

    show do
      title 'Prepare Binding Bead Mix'
      check "Vortex the Total Nucleic Acid Magnetic Beads to ensure \
            that the bead mixture is homogeneous"
      check "Add #{qty_display(bs_per_tube)} Binding Solution per tube to \
            #{qty_display(num_tubes)}"
      check "Add #{qty_display(beads_per_tube)} Nucleic Acid Magnetic Beads \
            per tube to #{qty_display(num_tubes)}"
      check 'Mix well by inversion, leave at room temperature'
    end
  end

  def notes_on_handling; end

  def lyse_samples_constant_volume(sample_volume:, expert:)
    make_sample_plate(sample_volume: sample_volume)
    add_reagents_and_beads
    shake(time: TIME2, covered: true)
    incubate(time: TIME5)
    shake(time: TIME5, covered: true)
    collect_beads(time: TIME10)
  end

  def make_sample_plate(sample_volume: nil)
    sample_volume ||= VOL_SAMPLE
    operations.each do |op|
      input_plate = op.input('Specimen')
      show do
        title 'Add Samples to New Plate'
        check "Make a 96 deepwell plate according to the following table using \
              #{qty_display(sample_volume)} of sample"
        check "Add #{qty_display(sample_volume)} of water to the wells marked \
              by X as negative controls"
        check 'Mark the Negative Control well on the plate'

        title 'New Plate'
        table input_plate.collection.matrix
      end
    end
  end

  def add_reagents_and_beads
    show do
      title 'Add Reagents and Beads'
      check "Add #{qty_display(VOL_PROTEINASE_K)} of Proteinase K to each \
            well of deepwell 96 Plate"
      check "Invert the Binding Bead Mix 5 times gently to mix, then add \
            #{qty_display(VOL_PROTEINASE_K)} to each sample well and \
            Negative Control well"
      warning "Remix the Binding Bead Mix by inversion frequently during \
              pipetting to ensure even distribution of beads to all wells."
      warning "The Binding Bead Mix is viscous, so pipet slowly to ensure \
              that the correct amount is added"
      check "Add #{qty_display(VOL_MS2)} of MS2 Phage Control to each sample \
            well and to the Negative Control well."
      check 'Seal the plate with clear adhesive film'
    end
  end

  def shake(time:, covered:)
    cover = covered ? 'covered' : 'uncovered'
    show do
      title 'Shake Plate'
      check "Shake the <b>#{cover}</b> plate at #{SPEED} RPM for \
            #{time} #{MINUTES}"
      timer initial: { minutes: time }
    end
  end

  def incubate(time:)
    show do
      title 'Incubate Sealed Plate'
      note 'Ensure the bottom of the plate is uncovered'
      check "Incubate plate at #{TEMP} #{DEGREES_C}for #{time} #{MINUTES}"
      timer initial: { minutes: time }
    end
  end

  def collect_beads(time:)
    show do
      title 'Collect Beads on Magnetic Stand'
      check "Place the sealed plate on the magnetic stand for \
            #{time} #{MINUTES} or until all of the beads have collected"
    end
  end

  def bind_rna(operations:, sample_volume:, expert:); end

  def wash_rna(operations:, expert:)
    wash_beads(reagent: 'Wash Buffer', vol: VOL_WB[:qty])
    wash_beads(reagent: '80% Ethanol', vol: VOL_WB[:qty]) # same as wash buffer
    wash_beads(reagent: '80% Ethanol', vol: VOL_ETHANOL[:qty])
    shake(time: TIME2, covered: false) # dry beads
  end

  def wash_beads(reagent:, vol:)
    discard_supernant if reagent == 'Wash Buffer'
    wash(reagent: reagent, vol: vol)
    shake(time: TIME1, covered: true)
    collect_beads(time: TIME2)
    discard_supernant
  end

  def discard_supernant
    show do
      title 'Discard supernant'
      warning 'IMPORTANT! Avoid disturbing the beads'
      check "Keeping the plate on the magnet, carefully remove the cover, \
            then discard the supernatant from each well"
    end
  end

  def wash(reagent:, vol:)
    show do
      title 'Wash Beads'
      check "Remove the plate from the magnetic stand, then add \
            #{vol} #{MICROLITERS} of #{reagent} to each sample"
    end
  end

  def elute_rna(operations:, expert:)
    add_elution_solution
    shake(time: TIME5, covered: true)
    incubate(time: TIME10)
    shake(time: TIME5, covered: true)
    collect_beads(time: TIME3)
    make_qpcr_plate(ops: operations)
  end

  def add_elution_solution
    show do
      title 'Add Elution Solution'
      check "Remove the plate from the magnetic stand, then add \
            #{qty_display(VOL_ELUTION)} of Elution Solution to each sample"
      check 'Seal the plate with Clear Adhesive Film'
    end
  end

  def make_qpcr_plate(ops:)
    ops.make
    ops.each do |op|
      input_collection = op.input('Specimen').collection
      input_collection.mark_as_deleted
      output_collection = op.output('Specimen').collection
      output_collection.associate_matrix(input_collection.matrix)
    end
    show do
      title 'Make qPCR Plate'
      warning "Pay special attention to transfer liquid solution only. \
              Significant bead carry over may adversely impact qPCR performance"
      check 'Keeping the plate on the magnet, carefully remove the seal'
      check 'Transfer the eluates to a 96 well qPCR plate'
      check 'Mark the Negative Control well on the plate'
      check 'Seal the new plate with Clear Adhesive Film'
      check 'Place the plate on ice for immediate use in qPCR'
    end
  end
end

library: {name: QIAampDSPViralRNAMiniKit, category: RNA Extraction Kits}
code_source:
# frozen_string_literal: true

needs 'RNA Extraction Kits/QiagenRNAExtractionHelper'

# Module for QIAamp DSP Viral RNA Mini Kit
#
# @author Devin Strickland <strcklnd@uw.edu>
module QIAampDSPViralRNAMiniKit
  include QiagenRNAExtractionHelper

  NAME = 'QIAamp DSP Viral RNA Mini Kit'

  COLUMN_LONG = 'QIAamp Mini spin column'

  MIN_SAMPLE_VOLUME =     { qty: 140, units: MICROLITERS }.freeze
  DEFAULT_SAMPLE_VOLUME = MIN_SAMPLE_VOLUME
  WASH_VOLUME =           { qty: 500, units: MICROLITERS }.freeze

  CENTRIFUGE_SPEED = { qty: 6000, units: TIMES_G }.freeze
  CENTRIFUGE_TIME = { qty: 1, units: MINUTES }.freeze

  def prepare_materials
    show do
      title 'Things to do before starting'
      bullet "Equilibrate samples to room temperature (15-25#{DEGREES_C})"
      bullet 'Equilibrate Buffer AVE to room temperature'
      # TODO: Need some way of indicating this has been done
      bullet 'Check that Buffer AW1 and Buffer AW2 have been prepared ' \
        'according to the instructions'
      # TODO: Need some way of indicating this has been done
      bullet 'Add carrier RNA reconstituted in Buffer AVE to Buffer AVL ' \
        'according to the instructions'
    end
  end

  def notes_on_handling
    qiagen_notes_on_handling
  end

  # @todo will we be working with a different sample volume for each operation?
  # @todo make use_operations do this^
  def lyse_samples_constant_volume(sample_volume: DEFAULT_SAMPLE_VOLUME,
                                   expert: false)
    # TODO: Move this logic up to the calling method
    if sample_volume[:qty] < MIN_SAMPLE_VOLUME[:qty]
      msg = "Sample volume must be > #{qty_display(MIN_SAMPLE_VOLUME)}"
      raise ProtocolError, msg
    end
    buffer_volume = lysis_buffer_volume(sample_volume: sample_volume)
    ethanol_volume = ethanol_volume(sample_volume: sample_volume)

    show do
      title 'Lyse Samples'

      # TODO: Add Pipettor module
      note "Pipet #{qty_display(buffer_volume)} of prepared Buffer AVL " \
        'containing carrier RNA into a lysis tube (LT).'
      # If the sample volume is larger than 140 ul, increase the amount of
      # Buffer AVL-carrier RNA proportionally (e.g., a 280 ul sample will
      # require 1120 ul Buffer AVL-carrier RNA) and use a larger tube.
      note "Add #{qty_display(sample_volume)} plasma, serum, urine, " \
        'cell-culture supernatant, or cell- free body fluid to the ' \
        'Buffer AVL-carrier RNA in the lysis tube (LT).'
      note "Mix by pulse-vortexing for 15 #{SECONDS}."
      warning 'To ensure efficient lysis, it is essential that the sample ' \
        'is mixed thoroughly with Buffer AVL to yield a homogeneous solution'
      # Frozen samples that have only been thawed once can also be used.
      note "Incubate at room temperature (15-25#{DEGREES_C}) for 10 #{MINUTES}"
    end

    show do
      title 'Add Ethanol'

      note 'Briefly centrifuge the lysis tube (LT) to remove drops from ' \
        'the inside of the lid.'
      note "Add #{qty_display(ethanol_volume)} ethanol (96-100%) to the " \
        'sample, and mix by pulse-vortexing for >15 seconds. ' \
        'After mixing, briefly centrifuge the tube to remove drops from ' \
        'inside the lid.'
      # Only ethanol should be used since other alcohols may result in
      # reduced RNA yield and purity. Do not use denatured alcohol, which
      # contains other substances such as methanol or methylethylketone.
      # If the sample volume is greater than 140 ul, increase the amount of
      # ethanol proportionally (e.g., a 280 ul sample will require
      # 1120 ul of ethanol). In order to ensure efficient binding, it is
      # essential that the sample is mixed thoroughly with the ethanol
      # to yield a homogeneous solution.
    end
  end

  def lyse_samples_variable_volume(operations:, expert: false)
    msg = 'Method lyse_samples_variable_volume is not supported for ' \
      'QIAamp DSP Viral RNA Mini Kit'
    raise ProtocolError, msg
  end

  def bind_rna(operations: [], sample_volume: DEFAULT_SAMPLE_VOLUME,
               expert: false)
    loading_volume, n_loads = loading_volume(sample_volume: sample_volume)

    show do
      title 'Add Samples to Columns'

      note "Carefully apply #{qty_display(loading_volume)} of the " \
        "sample solution to the #{COLUMN_LONG} (in a #{WASH_TUBE_LONG}) " \
        'without wetting the rim.'
      note "Close the cap, and centrifuge at #{CENTRIFUGE_SPEED} " \
        "for #{CENTRIFUGE_TIME}. Place the #{COLUMN_SHORT} into a clean" \
        "#{WASH_TUBE_SHORT}, and discard the old #{WASH_TUBE_SHORT} " \
        'containing the filtrate.'
      warning 'Close each spin column in order to avoid cross-contamination ' \
        'during centrifugation.'
      # Centrifugation is performed at approximately 6000 x g in order to limit
      # microcentrifuge noise. Centrifugation at full speed will not affect the
      # yield or purity of the viral RNA. If the solution has not completely
      # passed through the membrane, centrifuge again at a higher speed
      # until all of the solution has passed through.
      separator

      # Harmonize handling of repeats with RNeasy kit
      note "Carefully open the #{COLUMN_SHORT}, and repeat the loading until " \
        'all of the lysate has been loaded onto the spin column.'
    end
  end

  def wash_rna(operations: [], expert: false)
    show do
      title 'Wash with Buffer AW1'

      note "Carefully open the #{COLUMN_LONG}, and add " \
        "#{qty_display(WASH_VOLUME)} Buffer AW1."
      note 'Close the cap, and centrifuge at ' \
        "#{CENTRIFUGE_SPEED} for #{CENTRIFUGE_TIME}."
      note "Place the #{COLUMN_SHORT} in a clean #{WASH_TUBE_LONG}, " \
        "and discard the #{WASH_TUBE_SHORT} containing the filtrate."
      # It is not necessary to increase the volume of Buffer AW1 even if the
      # original sample volume was larger than 140 ul.
    end

    show do
      title 'Wash with Buffer AW2'

      note "Carefully open the #{COLUMN_LONG}, and add " \
        "#{qty_display(WASH_VOLUME)} Buffer AW2."
      # This centrifuge speed is meant to be different
      note 'Close the cap and centrifuge at full speed ' \
        "(approximately 20,000 #{TIMES_G}) for 3 #{MINUTES}."
      separator

      note "Place the #{COLUMN_SHORT} in a new #{WASH_TUBE_LONG}, " \
        "and discard the #{WASH_TUBE_SHORT} containing the filtrate."
      # This centrifuge speed is meant to be different
      note "Centrifuge at full speed for 1 #{MINUTES}."
    end
  end

  def elute_rna(operations: [], expert: false)
    show do
      title 'Elute RNA'

      note "Place the #{COLUMN_LONG} in a clean #{ELUTION_TUBE_LONG}."
      note 'Discard the wash tube containing the filtrate.'
      note "Carefully open the #{COLUMN_SHORT} and add " \
        "60 #{MICROLITERS} of Buffer AVE equilibrated to room temperature."
      note "Close the cap, and incubate at room temperature for >1 #{MINUTES}."
      note "Centrifuge at #{CENTRIFUGE_SPEED} " \
        "for #{CENTRIFUGE_TIME}."
    end
  end

  private

  def lysis_buffer_volume(sample_volume:)
    unless sample_volume[:units] == MICROLITERS
      raise ProtocolError, "Parameter :sample_volume must be in #{MICROLITERS}"
    end

    qty = sample_volume[:qty] * 560 / 140
    { qty: qty, units: MICROLITERS }
  end

  def ethanol_volume(sample_volume:)
    qty = lysis_buffer_volume(sample_volume: sample_volume)
    { qty: qty, units: MICROLITERS }
  end

  # TODO: Is this right?
  def loading_volume(sample_volume:)
    qty = 630
    n_loads = 2
    [{ qty: qty, units: MICROLITERS }, n_loads]
  end
end

library: {name: QiagenRNAExtractionHelper, category: RNA Extraction Kits}
code_source:
# frozen_string_literal: true

needs 'Standard Libs/Units'

# Module for common methods and constants in Qiagen RNA extraction kits
#
# @author Devin Strickland <strcklnd@uw.edu>
module QiagenRNAExtractionHelper
  include Units

  COLUMN_LONG = 'Qiagen spin column'
  COLUMN_SHORT = 'spin column'

  LYSIS_TUBE_LONG = 'lysis tube (LT)'
  LYSIS_TUBE_SHORT = 'LT'

  WASH_TUBE_LONG = "2 #{MILLILITERS} wash tube (WT)"
  WASH_TUBE_SHORT = 'WT'

  ELUTION_TUBE_LONG = 'elution tube (ET)'
  ELUTION_TUBE_SHORT = 'ET'

  # @note adapted from QIAamp DSP Viral RNA Mini Kit
  # @todo determine how much of the detail to keep or change
  def qiagen_notes_on_handling
    show do
      title "Handling of #{COLUMN_LONG.pluralize}"

      note 'Due to the sensitivity of nucleic acid amplification ' \
        'technologies, the following precautions are necessary when handling ' \
        "#{COLUMN_LONG.pluralize} to avoid cross contamination between " \
        'sample preparations:'
      bullet "Carefully apply the sample or solution to the #{COLUMN_SHORT}. " \
        "Pipet the sample into the #{COLUMN_SHORT} " \
        'without wetting the rim of the column.'
      bullet 'Always change pipet tips between liquid transfers. ' \
        'We recommend the use of aerosol-barrier pipet tips.'
      bullet "Avoid touching the #{COLUMN_SHORT} membrane with " \
        'the pipet tip.'
      bullet 'After all pulse-vortexing steps, briefly centrifuge the ' \
       'microcentrifuge tubes to remove drops from the inside of the lids.'
      bullet "Open only one #{COLUMN_SHORT} at a time, and take care " \
        'to avoid generating aerosols.'
      bullet 'Wear gloves throughout the entire procedure. In case of ' \
        'contact between gloves and sample, change gloves immediately.'
    end
  end
end

library: {name: QiagenRNeasyMiniKit, category: RNA Extraction Kits}
code_source:
# frozen_string_literal: true

needs 'RNA Extraction Kits/QiagenRNAExtractionHelper'

# Module for Qiagen RNeasy Mini Kit
#
# @author Devin Strickland <strcklnd@uw.edu>
# @note The instructions here are based on the BU Center for Regenerative
#   Medicine COVID-19 test (http://www.bu.edu/dbin/stemcells/covid-19.php)
module QiagenRNeasyMiniKit
  include QiagenRNAExtractionHelper

  NAME = 'Qiagen RNeasy Mini Kit'

  COLUMN_LONG = 'RNeasy spin column'

  MIN_SAMPLE_VOLUME = { qty: 300, units: MICROLITERS }.freeze
  DEFAULT_SAMPLE_VOLUME = MIN_SAMPLE_VOLUME

  CENTRIFUGE_SPEED = { qty: 8000, units: TIMES_G }.freeze
  CENTRIFUGE_TIME = { qty: 15, units: SECONDS }.freeze
  CENTRIFUGE_TIME_AND_SPEED = "#{Units.qty_display(CENTRIFUGE_TIME)} at " \
    "#{Units.qty_display(CENTRIFUGE_SPEED)}"

  LYSIS_BUFFER = 'Buffer RLT'

  ELUTION_VOLUME = { qty: 50, units: MICROLITERS }.freeze
  ELUTION_TUBE_LONG = "new 1.5 #{MILLILITERS} collection tube (supplied)"
  ELUTION_TUBE_SHORT = 'collection tube'

  # @todo may need to add something from the Qiagen manual
  def prepare_materials; end

  def notes_on_handling
    qiagen_notes_on_handling
  end

  # @note adapted from `QIAampDSPViralRNAMiniKit`
  # @todo determine how much of the detail to keep or change
  def lyse_samples_constant_volume(sample_volume: DEFAULT_SAMPLE_VOLUME,
                                   expert: false)
    # TODO: Move this logic up to the calling method
    if sample_volume[:qty] < MIN_SAMPLE_VOLUME[:qty]
      msg = "Sample volume must be > #{qty_display(MIN_SAMPLE_VOLUME)}"
      raise ProtocolError, msg
    end
    buffer_volume = lysis_buffer_volume(sample_volume: sample_volume)
    ethanol_volume = ethanol_volume(sample_volume: sample_volume)

    show do
      title 'Lyse Samples'

      note "Pipet #{qty_display(buffer_volume)} of #{LYSIS_BUFFER} " \
        "into a #{LYSIS_TUBE_LONG}."
      note "Add #{qty_display(sample_volume)} sample to the " \
        "#{LYSIS_BUFFER} in the #{LYSIS_TUBE_SHORT}."
      # TODO: Should this be kept in?
      # note "Mix by pulse-vortexing for 15 #{SECONDS}."
      warning 'To ensure efficient lysis, it is essential that the sample is ' \
        "mixed thoroughly with #{LYSIS_BUFFER} to yield a homogeneous solution"
      # Frozen samples that have only been thawed once can also be used.
      # TODO: Should this be kept in?
      # note "Incubate at room temperature (15-25#{DEGREES_C}) for 10 #{MINUTES}"
    end

    show do
      title 'Add Ethanol'

      note "Briefly centrifuge the #{LYSIS_TUBE_LONG} to remove drops from " \
        'the inside of the lid.'
      note "Add #{qty_display(ethanol_volume)} ethanol (100%) to the " \
        'sample, and mix by pulse-vortexing for >15 seconds. ' \
        'After mixing, briefly centrifuge the tube to remove drops from ' \
        'inside the lid.'
      # Only ethanol should be used since other alcohols may result in
      # reduced RNA yield and purity. Do not use denatured alcohol, which
      # contains other substances such as methanol or methylethylketone.
      # If the sample volume is greater than 140 ul, increase the amount of
      # ethanol proportionally (e.g., a 280 ul sample will require
      # 1120 ul of ethanol). In order to ensure efficient binding, it is
      # essential that the sample is mixed thoroughly with the ethanol
      # to yield a homogeneous solution.
    end
  end

  def lyse_samples_variable_volume(operations:, expert: false)
    msg = 'Method lyse_samples_variable_volume is not supported for ' \
      'Qiagen RNeasy Mini Kit'
    raise ProtocolError, msg
  end

  # @note adapted from `QIAampDSPViralRNAMiniKit`
  # @todo determine how much of the detail to keep or change
  def bind_rna(operations: [], sample_volume: DEFAULT_SAMPLE_VOLUME,
               expert: false)
    loading_volume, n_loads = loading_volume(sample_volume: sample_volume)

    show do
      title 'Add Samples to Columns'

      note "Carefully apply #{qty_display(loading_volume)} of the sample " \
        "solution to the #{COLUMN_LONG} (in a wash tube (WT)) without " \
        'wetting the rim.'
      note "Close the cap, and centrifuge for #{CENTRIFUGE_TIME_AND_SPEED}."
      note "Place the #{COLUMN_SHORT} into a clean #{WASH_TUBE_LONG}, and " \
        'discard the wash tube containing the filtrate.'
      warning 'Close each spin column in order to avoid cross-contamination ' \
        'during centrifugation.'
      # Centrifugation is performed at approximately 6000 x g in order to limit
      # microcentrifuge noise. Centrifugation at full speed will not affect the
      # yield or purity of the viral RNA. If the solution has not completely
      # passed through the membrane, centrifuge again at a higher speed
      # until all of the solution has passed through.
      separator

      note "Carefully open the #{COLUMN_SHORT}, and repeat the " \
        "loading #{n_loads - 1} more times until all of the lysate has " \
        'been loaded onto the spin column.'
    end
  end

  def wash_rna(operations: [], expert: false)
    show do
      title 'Wash with Buffer RW1'

      note "Add 700 #{MICROLITERS} Buffer RW1 to the #{COLUMN_LONG}."
      note 'Close the lid gently, and centrifuge for ' \
        "#{CENTRIFUGE_TIME_AND_SPEED}."
      warning "Carefully remove the #{COLUMN_SHORT} from the collection " \
        'tube so that the column does not contact the flow-through.'
      note 'Empty the collection tube completely.'
      note 'Reuse the collection tube in the next step.'
    end

    show do
      title 'Wash twice with Buffer RPE'

      note "Add 500 #{MICROLITERS} Buffer RPE to the #{COLUMN_LONG}."
      note 'Close the lid gently, and centrifuge for ' \
        "#{CENTRIFUGE_TIME_AND_SPEED}."
      note 'Empty the collection tube.'
      note 'Reuse the collection tube in the next step.'
      # Note: Buffer RPE is supplied as a concentrate. Ensure that ethanol is
      # added to Buffer RPE before use (see Things to do before starting).
      separator

      note "Add 500 #{MICROLITERS} Buffer RPE to the #{COLUMN_SHORT}."
      # The long centrifugation dries the spin column membrane, ensuring that
      # no ethanol is carried over during RNA elution. Residual ethanol may
      # interfere with downstream reactions.
      note "Close the lid gently, and centrifuge for 2 #{MINUTES} at " \
        "#{qty_display(CENTRIFUGE_SPEED)}."
      warning "Carefully remove the #{COLUMN_SHORT} from the collection " \
        'tube so that the column does not contact the flow-through.'
      note 'Discard the collection tube.'
      separator

      # TODO: Should we do this step?
      note "Place the #{COLUMN_SHORT} in a new #{WASH_TUBE_LONG}, " \
        "and discard the #{WASH_TUBE_SHORT} containing the filtrate."
      # This centrifuge speed is meant to be different
      note "Centrifuge at full speed for 1 #{MINUTES}."
    end
  end

  def elute_rna(operations: [], expert: false)
    show do
      title 'Elute RNA'

      note "Place the #{COLUMN_LONG} in a #{ELUTION_TUBE_LONG}."
      note "Add #{qty_display(ELUTION_VOLUME)} RNAse-free water directly " \
        'to the spin column membrane.'
      note "Close the lid gently, and centrifuge for 1 #{MINUTES} at " \
        "#{qty_display(CENTRIFUGE_SPEED)}."
    end
  end

  private

  # @todo generalize this for all sample lysis buffers
  def lysis_buffer_volume(sample_volume:)
    unless sample_volume[:units] == MICROLITERS
      raise ProtocolError, "Parameter :sample_volume must be in #{MICROLITERS}"
    end

    qty = sample_volume[:qty]
    { qty: qty, units: MICROLITERS }
  end

  def ethanol_volume(sample_volume:)
    qty = sample_volume[:qty] * 2.0
    { qty: qty, units: MICROLITERS }
  end

  def loading_volume(sample_volume:)
    qty = sample_volume[:qty]
    qty += lysis_buffer_volume(sample_volume: sample_volume)[:qty]
    qty += ethanol_volume(sample_volume: sample_volume)[:qty]
    if qty <= 600
      n_loads = 1
    elsif qty <= 1200
      n_loads = 2
    elsif qty <= 1800
      n_loads = 3
    else
      raise ProtocolError, 'Parameter :sample_volume must be <= 1800 ' \
        "#{MICROLITERS}"
    end
    qty /= n_loads.to_f
    [{ qty: qty, units: MICROLITERS }, n_loads]
  end
end

library: {name: RNAExtractionHelper, category: RNA Extraction Kits}
code_source:
# typed: false
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/Units'
needs 'Standard Libs/Debug'
needs 'RNA Extraction Kits/RNAExtractionKits'

# Module for elements that are common to RNA Extraction Protocols
#
# @author Devin Strickland <strcklnd@uw.edu>
module RNAExtractionHelper
  include PlanParams
  include Units
  include Debug
  include RNAExtractionKits

  def sample_volume(operation)
    operation.temporary[:options][:sample_volume]
  end
end

library: {name: RNAExtractionKits, category: RNA Extraction Kits}
code_source:
# frozen_string_literal: true

needs 'RNA Extraction Kits/SupportedRNAExtractionKits'

# Module for switching among several different RNA extraction kits
#
# @author Devin Strickland <strcklnd@uw.edu>
module RNAExtractionKits
  include SupportedRNAExtractionKits

  # Run the protocol defined by the kit
  #
  # @note if `sample_volume` is provided, then all samples will be run
  #   using that volume of sample
  # @note if `sample_volume` is not provided, but `operations` are, then
  #   the protocol will look for sample_volumes assigned to the `Operations`
  # @note if neither `sample_volume` nor `operations` are provided, then
  #   all samples will be run using `DEFAULT_SAMPLE_VOLUME`
  # @param operations [OperationList] the operations to run
  # @param sample_volume [Hash] the volume as a Hash in the format
  #   `{ qty: 140, units: MICROLITERS }`
  # @return [void]
  def run_rna_extraction_kit(operations: [], sample_volume: nil, expert: false)
    prepare_materials

    notes_on_handling unless expert

    if sample_volume
      lyse_samples_constant_volume(sample_volume: sample_volume, expert: expert)
    elsif operations.present?
      lyse_samples_variable_volume(operations: operations, expert: expert)
    else
      lyse_samples_constant_volume(expert: expert)
    end

    bind_rna(
      operations: operations,
      sample_volume: sample_volume,
      expert: expert
    )

    wash_rna(operations: operations, expert: expert)

    elute_rna(operations: operations, expert: expert)
  end
end

library: {name: SupportedRNAExtractionKits, category: RNA Extraction Kits}
code_source:
# frozen_string_literal: true

needs 'RNA Extraction Kits/TestRNAExtractionKit'
needs 'RNA Extraction Kits/QIAampDSPViralRNAMiniKit'
needs 'RNA Extraction Kits/QiagenRNeasyMiniKit'

# Module for enumerating supported RNA extraction kits
#
# @author Devin Strickland <strcklnd@uw.edu>
module SupportedRNAExtractionKits
  # Extend the module with the correct methods based on the kit name
  #
  # @param name [String] the name of the kit
  # @return [void]
  def set_kit(name:)
    case name
    when TestRNAExtractionKit::NAME
      extend TestRNAExtractionKit
    when QIAampDSPViralRNAMiniKit::NAME
      extend QIAampDSPViralRNAMiniKit
    when QiagenRNeasyMiniKit::NAME
      extend QiagenRNeasyMiniKit
    else
      raise ProtocolError, "Unrecognized RNA Extraction Kit: #{name}"
    end
  end
end

library: {name: TestRNAExtractionKit, category: RNA Extraction Kits}
code_source:
# frozen_string_literal: true

needs 'Standard Libs/Units'

# Minimal RNA Extraction Kit Module for testing
#
# @author Devin Strickland <strcklnd@uw.edu>
module TestRNAExtractionKit
  include Units

  NAME = 'Test RNA Extraction Kit'

  MIN_SAMPLE_VOLUME =     { qty: 140, units: MICROLITERS }.freeze
  DEFAULT_SAMPLE_VOLUME = MIN_SAMPLE_VOLUME

  def prepare_materials
    show do
      title 'Things to do before starting'
    end
  end

  def notes_on_handling
    show do
      title 'Handling Materials'
    end
  end

  def lyse_samples_constant_volume(sample_volume:, expert: false)
    show do
      title 'Lyse Samples Constant Volume'

      note "Sample volume: #{qty_display(sample_volume)}"
    end
  end

  def lyse_samples_variable_volume(operations:, expert: false)
    show do
      title 'Lyse Samples Variable Volume'

      operations.each { |op| note "Sample volume: #{sample_volume(op)}" }
    end
  end

  def bind_rna(operations: [], sample_volume: DEFAULT_SAMPLE_VOLUME,
               expert: false)
    show do
      title 'Add Samples to Columns'
    end
  end

  def wash_rna(operations: [], expert: false)
    show do
      title 'Wash with Buffer'
    end
  end

  def elute_rna(operations: [], expert: false)
    show do
      title 'Elute RNA'
    end
  end
end

operation_type: RNA Extraction Test
category: Test
deployed: false
on_the_fly: false
field_types:
  - {ftype: json, role: input, name: Options}
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protocol:
# frozen_string_literal: true

needs 'Standard Libs/PlanParams'
needs 'Standard Libs/Units'
needs 'Standard Libs/Debug'
needs 'RNA Extraction Kits/RNAExtractionKits'

# Test Extract RNA Protocol
#
# @author Devin Strickland <strcklnd@uw.edu>
class Protocol
  include PlanParams
  include Units
  include Debug
  include RNAExtractionKits

  ########## DEFAULT PARAMS ##########

  # Default parameters that are applied equally to all operations.
  #   Can be overridden by:
  #   * Associating a JSON-formatted list of key, value pairs to the `Plan`.
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_job_params
    {
      rna_extraction_kit: TestRNAExtractionKit::NAME,
      expert: false
    }
  end

  # Default parameters that are applied to individual operations.
  #   Can be overridden by:
  #   * Adding a JSON-formatted list of key, value pairs to an `Operation`
  #     input of type JSON and named `Options`.
  #
  def default_operation_params
    {
      sample_volume: { qty: 300, units: MICROLITERS }

    }
  end

  ########## MAIN ##########

  def main
    setup_test_options(operations: operations) if debug

    @job_params = update_all_params(
      operations: operations,
      default_job_params: default_job_params,
      default_operation_params: default_operation_params
    )
    return {} if operations.errored.any?

    operations.retrieve.make

    set_kit(name: @job_params[:rna_extraction_kit])

    sample_volumes = operation_sample_volumes(operations)
    if sample_volumes.uniq.length == 1
      run_rna_extraction_kit(
        sample_volume: sample_volumes.first,
        expert: @job_params[:expert]
      )
    else
      run_rna_extraction_kit(
        operations: operations,
        expert: @job_params[:expert]
      )
    end

    operations.store

    {}
  end

  def operation_sample_volumes(operations)
    operations.map { |op| op.temporary[:options][:sample_volume] }
  end
end

test:
# frozen_string_literal: true

class ProtocolTest < ProtocolTestBase
  def setup
    # add_random_operations(1)

    # Use this if you want to test alternative extraction kits
    # Kits
    #   Qiagen RNeasy Mini Kit
    #   QIAamp DSP Viral RNA Mini Kit
    #   Test RNA Extraction Kit
    #   MagMAX Viral/Pathogen II Nucleic Acid Isolation Kit
    add_operation
      .with_property(
        'Options',
        '{ "rna_extraction_kit": "MagMAX Viral/Pathogen II Nucleic Acid Isolation Kit", "expert": false }'
      )
  end

  def analyze
    log('Hello from Nemo')
    assert_equal(@backtrace.last[:operation], 'complete')
  end
end
